# Generated by Configurator on Fri Jun 15 15:01:46 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,DefiniteFocusVersion,1
Property,ZeissScope,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZeissFocusAxis,0

# Roles
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,5,6- 
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-49 DAPI
Label,ZeissReflectorTurret,2,3-Module P&C
Label,ZeissReflectorTurret,1,2-38 GFP
Label,ZeissReflectorTurret,0,1-Empty Module
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,6,7-Objektiv7
Label,ZeissObjectiveTurret,5,6-Objektiv6
Label,ZeissObjectiveTurret,4,5-Objektiv5
Label,ZeissObjectiveTurret,3,4-Objektiv4
Label,ZeissObjectiveTurret,2,3-Plan-Apochromat 63x/1.40 Oil M27
Label,ZeissObjectiveTurret,1,2-Objektiv2
Label,ZeissObjectiveTurret,0,1-EC Plan-Neofluar 20x/0.50 M27

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

