# Generated by Configurator on Mon Jul 30 16:21:11 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,ZeissScope,ZeissTest,ZeissScope
Device,ZeissXYStage,ZeissTest,ZeissXYStage
Device,ZeissFocusAxis,ZeissTest,ZeissFocusAxis
Device,IDS uEye,IDS_uEye,IDS uEye
Device,ZeissObjectiveTurret,ZeissTest,ZeissObjectiveTurret
Device,ZeissReflectorTurret,ZeissTest,ZeissReflectorTurret
Device,ZeissTransmittedLightShutter,ZeissTest,ZeissTransmittedLightShutter
Device,ZeissReflectedLightShutter,ZeissTest,ZeissReflectedLightShutter

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,DefiniteFocusVersion,1
Property,ZeissScope,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZeissFocusAxis,0

# Roles
Property,Core,Camera,IDS uEye
Property,Core,Shutter,ZeissTransmittedLightShutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,6,7-Objektiv7
Label,ZeissObjectiveTurret,5,6-none
Label,ZeissObjectiveTurret,4,5-Objektiv5
Label,ZeissObjectiveTurret,3,4-Objektiv4
Label,ZeissObjectiveTurret,2,3-Plan-Apochromat 63x/1.40 Oil M27
Label,ZeissObjectiveTurret,1,2-Objektiv2
Label,ZeissObjectiveTurret,0,1-EC Plan-Neofluar 20x/0.50 M27
# ZeissReflectorTurret
Label,ZeissReflectorTurret,5,6- 
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-49 DAPI
Label,ZeissReflectorTurret,2,3-43 DsRed
Label,ZeissReflectorTurret,1,2-38 GFP
Label,ZeissReflectorTurret,0,1-Empty Module

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,Camera,IDS uEye
PixelSize_um,Res0,0.2619
ConfigPixelSize,Res0,Core,XYStage,ZeissXYStage
PixelSize_um,Res0,0.2619


